PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[-1,-1,-1]
  expName = time_perception_2Phases_Longer_RUS
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Routines
  Routine welcomeScreen
    TextComponent welcomeText
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Здравствуйте!

        Ваша задача сравнить длительности последовательно предъявляемых двух звездочек и указать какая из них была на экране больше времени:

        первая (нажать клавишу 1) или вторая (нажать клавишу 2).

        Во время выполнения задания мы просим Вас отложить все другие дела и полагаться на Ваше внутреннее чувство времени, не пользоваться часами и не считать про себя.

        Нажмите клавишу 'Пробел' для начала эксперимента.
    KeyboardComponent welcomeResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine firstInterval
    ImageComponent firstImg
      image = img/stim.png
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Time1[Seq]
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  Routine secondInterval
    ImageComponent secondImg
      image = img/stim.png
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Time2[Seq]
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  Routine blackScreen1
    ImageComponent blackImg1
      image = img/black.png
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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  Routine blackScreen2
    ImageComponent blackImg2
      image = img/black.png
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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  Routine responseScreen
    ImageComponent responseImg
      image = img\resp_longer_rus.png
      saveStartStop = False
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent choice
      allowedKeys = '1', '2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine endScreen
    TextComponent endText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Спасибо большое за участие!
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  Routine blackScreen3
    TextComponent responseText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Нажмите 'Пробел' для продолжения.
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    KeyboardComponent responseRepeat
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent ExpCode
      Code Type = Auto->JS
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      Begin Experiment:
        Time1 = [5.6,4.0]
        Time2 = [4.0,5.6]
        Seq = 0 #Current sequence. For Seq = 0 -> Sequence starts from 5.6. For Seq = 1 -> Sequence starts from 4.0.
        TimeDurationExp = Time1[0]+Time2[0]

        StepsMAX = 6
        Steps = [0.4,0.4,0.4,0.4,0.4,0.4,0.4,0.4,0.4,0.4,0.4]
        Bends = [[],[]]

        status = ['down','up']
        StepsCount = [0,0]
        Experiment_Round = 1
      End Routine:
        # First Step - Writing current Trial data
        thisExp.addData('t1',Time1[Seq])
        thisExp.addData('t2',Time2[Seq])
        if Seq == 0: thisExp.addData('sequence',56)
        if Seq == 1: thisExp.addData('sequence',40)

        thisExp.addData('Step56',StepsCount[0])
        thisExp.addData('Step40',StepsCount[1])

        # Second Step - Changing timing accordingly for next Trial (in the seme sequence)
        # For Key='1' (t1 longer t2) we always make t1 smaller and t2 larger
        if (choice.keys == '1') and status[Seq] == 'down':
            Time1[Seq] -= Steps[StepsCount[Seq]]
            Time2[Seq] += Steps[StepsCount[Seq]]
        elif (choice.keys == '1') and status[Seq] == 'up':
            Time1[Seq] -= Steps[StepsCount[Seq]]
            Time2[Seq] += Steps[StepsCount[Seq]]
            status[Seq] = 'down'
            if StepsCount[Seq] >2: Bends[Seq].append(Time1[Seq])
            StepsCount[Seq] += 1

        # For Key='2' (t2 longer t1) we always make t1 larger and t1 smaller
        if (choice.keys == '2') and status[Seq] == 'down':
            Time1[Seq] += Steps[StepsCount[Seq]]
            Time2[Seq] -= Steps[StepsCount[Seq]]
            status[Seq] = 'up'
            if StepsCount[Seq] >2: Bends[Seq].append(Time1[Seq])
            StepsCount[Seq] += 1
        elif (choice.keys == '2') and status[Seq] == 'up':
            Time1[Seq] += Steps[StepsCount[Seq]]
            Time2[Seq] -= Steps[StepsCount[Seq]]

        # We check if both sequences has made max steps - then quit the experiment
        if StepsCount[0] >= StepsMAX and StepsCount[1] >= StepsMAX:
            mean1 = round(np.array(Bends[0]).mean(),1)
            mean2 = round(np.array(Bends[1]).mean(),1)
            meanBoth = round((mean1+mean2)/2,1)
            thisExp.addData('MeanSeq1',mean1)
            thisExp.addData('MeanSeq2',mean2)
            thisExp.addData('MeanBoth',meanBoth)
            SecondStart = TimeDurationExp - meanBoth
            Time1 = [meanBoth+0.8,SecondStart-0.8]
            Time2 = [meanBoth-0.8,SecondStart+0.8]
            thisExp.addData('NewTime1_start', Time1[0])
            thisExp.addData('NewTime1_end',Time1[1])
            thisExp.addData('NewTime2_start', Time2[0])
            thisExp.addData('NewTime2_end',Time2[1])
            #thisExp.addData('MeanSeq1&2',np.array(Bends[1]+Bends[0]).mean())
            if Experiment_Round <= 1:
                Experiment_Round = 2
                StepsCount=[0,0]
                Bends = [[],[]]
                status = ['down','up']
                time_durations.finished=True
            else:
                Experiment_Round = 3
                SecondPhase.finished=True
                time_durations.finished=True
  Routine Random_Sequence
    CodeComponent RandomSeq
      Code Type = Auto->JS
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      Begin Routine:
        # Choosing randomly one of two sequences
        if random() <= 0.5:
            Seq = 0
        else:
            Seq = 1
  Routine SecondPhase_Welcome
    CodeComponent codeSecond
      Code Type = Auto->JS
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      Begin Experiment:
        TextSecond = ""
      Begin Routine:
        if Experiment_Round <= 2:
            TextSecond = "Завершилась первая часть эксперимента.\nОсталось пройти вторую часть.\nНажмите клавишу 'Пробел' для начала."
        else:
            TextSecond = "Ваш эксперимент завершен! \n\nНажмите, пожалуйста, клавишу 'Пробел'."
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $TextSecond
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine test
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $TextSecond
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Flow
  Routine welcomeScreen
  LoopInitiator SecondPhase loopType="TrialHandler"
    loopType = sequential
    nReps = 1000
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    LoopInitiator time_durations loopType="TrialHandler"
      loopType = sequential
      nReps = 1000
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      Routine Random_Sequence
      Routine firstInterval
      Routine blackScreen1
      Routine secondInterval
      Routine blackScreen2
      Routine responseScreen
      Routine blackScreen3
    LoopTerminator time_durations
    Routine SecondPhase_Welcome
  LoopTerminator SecondPhase
  Routine endScreen
